# Generated by Configurator on Tue May 21 15:31:26 PDT 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM1,SerialManager,COM1
Device,COM3,SerialManager,COM3
Device,Andor EMCCD,Andor,Andor
Device,Andor sCMOS,AndorSDK3,Andor sCMOS Camera
Device,Andor Dragonfly,AndorDragonfly,Andor Dragonfly
Device,Andor ILE-A,AndorILE,Andor ILE
Device,Andor ILE-B,AndorILE,Andor ILE
Device,Multi Camera,Utilities,Multi Camera
Device,XYStage,ASIStage,XYStage
Device,PiezoZ,ASIStage,ZStage
Device,MeadowlarkLcOpenSource,MeadowlarkLcOpenSource,MeadowlarkLcOpenSource
Device,Scope,LeicaDMI,Scope
Device,IL-Turret,LeicaDMI,IL-Turret
Device,ObjectiveTurret,LeicaDMI,ObjectiveTurret
Device,TL-FieldDiaphragm,LeicaDMI,TL-FieldDiaphragm
Device,TL-ApertureDiaphragm,LeicaDMI,TL-ApertureDiaphragm
Device,IL-FieldDiaphragm,LeicaDMI,IL-FieldDiaphragm
Device,IL-ApertureDiaphragm,LeicaDMI,IL-ApertureDiaphragm
Device,FocusDrive,LeicaDMI,FocusDrive
Device,IL-Shutter,LeicaDMI,IL-Shutter
Device,TL-Shutter,LeicaDMI,TL-Shutter
Device,Condensor,LeicaDMI,Condensor
Device,Transmitted Light,LeicaDMI,Transmitted Light
Device,Adaptive Focus Control,LeicaDMI,Adaptive Focus Control
Device,Adaptive Focus Control Offset,LeicaDMI,Adaptive Focus Control Offset

# Pre-init settings for devices
Property,Andor EMCCD,Camera,| iXon Ultra | DU888_BV | 11530 |
Property,Andor Dragonfly,COM Port,COM4
Property,Andor Dragonfly,Configuration file,C:\ProgramData\DragonflyMMConfig.ini
Property,Andor ILE-A,Device,ILE03475A
Property,Andor ILE-B,Device,ILE03475B
Property,XYStage,Port,COM3
Property,PiezoZ,Axis,Z
Property,PiezoZ,Port,COM3
Property,MeadowlarkLcOpenSource,Controller S/N,L17458
Property,MeadowlarkLcOpenSource,Controller S/N-Activation Key,OPS-MeadowlarkLcOpenSource
Property,MeadowlarkLcOpenSource,Description Info,ver:101 (c) 2013-2015 Meadowlark OpticsInc
Property,MeadowlarkLcOpenSource,Number of Active LCs,2
Property,MeadowlarkLcOpenSource,Select Device #,1
Property,MeadowlarkLcOpenSource,Select Device Interface,20V (D5020) Controller
Property,MeadowlarkLcOpenSource,Select LC Type,Loaded From File (mmgr_dal_MeadowlarkLC.csv)
Property,MeadowlarkLcOpenSource,Total Number of LCs,2
Property,MeadowlarkLcOpenSource,Total Number of Palette Elements,5
Property,Scope,AnswerTimeOut,250.0000
Property,Scope,Port,COM5

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,19200
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,9600
Property,COM1,DataBits,8
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1

# Hub (parent) references
Parent,IL-Turret,Scope
Parent,ObjectiveTurret,Scope
Parent,TL-FieldDiaphragm,Scope
Parent,TL-ApertureDiaphragm,Scope
Parent,IL-FieldDiaphragm,Scope
Parent,IL-ApertureDiaphragm,Scope
Parent,FocusDrive,Scope
Parent,IL-Shutter,Scope
Parent,TL-Shutter,Scope
Parent,Condensor,Scope
Parent,Transmitted Light,Scope
Parent,Adaptive Focus Control,Scope
Parent,Adaptive Focus Control Offset,Scope

# Initialize
Property,Core,Initialize,1

# Delays
Delay,Andor ILE-A,2.0
Delay,Andor ILE-B,2.0
Delay,IL-Shutter,2.0
Delay,TL-Shutter,2.0
Delay,Transmitted Light,2.0

# Focus directions
FocusDirection,PiezoZ,0
FocusDirection,FocusDrive,0
FocusDirection,Adaptive Focus Control Offset,0

# Roles
Property,Core,Camera,Andor EMCCD
Property,Core,Shutter,TL-Shutter
Property,Core,Focus,FocusDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# IL-Turret
Label,IL-Turret,5,6-DFl
Label,IL-Turret,4,5-RCPVIS
Label,IL-Turret,3,4-RCP780
Label,IL-Turret,2,3-LinPol
Label,IL-Turret,1,2-BF
Label,IL-Turret,0,1-BF
# ObjectiveTurret
Label,ObjectiveTurret,5,6-Empty
Label,ObjectiveTurret,4,5-Empty
Label,ObjectiveTurret,3,4-63x 1.47na
Label,ObjectiveTurret,2,3-40x 1.1na
Label,ObjectiveTurret,1,2-20x 0.55na
Label,ObjectiveTurret,0,1-10x 0.3na
# Condensor
Label,Condensor,6,7--
Label,Condensor,5,6--
Label,Condensor,4,5--
Label,Condensor,3,4-Ph63x
Label,Condensor,2,3-Pol780
Label,Condensor,1,2-Pol532
Label,Condensor,0,1-BF

# Configuration presets
# Group: EMCCD Gain
# Preset: NewPreset
ConfigGroup,EMCCD Gain,NewPreset,Andor EMCCD,Gain,2


# Group: LaserPower_561
# Preset: NewPreset
ConfigGroup,LaserPower_561,NewPreset,Andor ILE-A,Laser 561-Power Setpoint,0.0000


# Group: LaserPower_637
# Preset: NewPreset
ConfigGroup,LaserPower_637,NewPreset,Andor ILE-A,Laser 637-Power Setpoint,0.0000


# Group: Channels-EMCCD
# Preset: EMCCD_BF
ConfigGroup,Channels-EMCCD,EMCCD_BF,Andor EMCCD,FrameTransfer,Off
ConfigGroup,Channels-EMCCD,EMCCD_BF,Andor EMCCD,ReadMode,Image
ConfigGroup,Channels-EMCCD,EMCCD_BF,Andor Dragonfly,Dichroic Mirror, 1 - CR-DFLY-DMQD-01;405-013/488-013/561-006/640-016
ConfigGroup,Channels-EMCCD,EMCCD_BF,Andor Dragonfly,Filter Wheel 1 Position, 7 - Empty
ConfigGroup,Channels-EMCCD,EMCCD_BF,Andor Dragonfly,Filter Wheel 2 Position, 7 - Empty
ConfigGroup,Channels-EMCCD,EMCCD_BF,Andor Dragonfly,Image Splitter,TR-DFLY-CMDM-PASS;100% Pass
ConfigGroup,Channels-EMCCD,EMCCD_BF,Andor Dragonfly,Imaging Mode [Power Density],Widefield [PD1]
ConfigGroup,Channels-EMCCD,EMCCD_BF,Andor ILE-A,Laser 405-Power Enable,Off
ConfigGroup,Channels-EMCCD,EMCCD_BF,Andor ILE-A,Laser 488-Power Enable,Off
ConfigGroup,Channels-EMCCD,EMCCD_BF,Andor ILE-A,Laser 561-Power Enable,Off
ConfigGroup,Channels-EMCCD,EMCCD_BF,Andor ILE-A,Laser 637-Power Enable,Off
ConfigGroup,Channels-EMCCD,EMCCD_BF,Andor ILE-B,Laser 445-Power Enable,Off
ConfigGroup,Channels-EMCCD,EMCCD_BF,Andor ILE-B,Laser 514-Power Enable,Off
ConfigGroup,Channels-EMCCD,EMCCD_BF,MeadowlarkLcOpenSource,String send to -,
ConfigGroup,Channels-EMCCD,EMCCD_BF,IL-Turret,Label,1-BF
ConfigGroup,Channels-EMCCD,EMCCD_BF,TL-Shutter,State,1
ConfigGroup,Channels-EMCCD,EMCCD_BF,Condensor,Label,1-BF
ConfigGroup,Channels-EMCCD,EMCCD_BF,Transmitted Light,State,1
ConfigGroup,Channels-EMCCD,EMCCD_BF,Core,Camera,Andor EMCCD
ConfigGroup,Channels-EMCCD,EMCCD_BF,Core,Shutter,TL-Shutter

# Preset: EMCCD_Confocal40_DAPI
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_DAPI,Andor EMCCD,FrameTransfer,Off
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_DAPI,Andor EMCCD,ReadMode,Image
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_DAPI,Andor Dragonfly,Dichroic Mirror, 1 - CR-DFLY-DMQD-01;405-013/488-013/561-006/640-016
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_DAPI,Andor Dragonfly,Filter Wheel 1 Position, 3 - 450
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_DAPI,Andor Dragonfly,Filter Wheel 2 Position, 3 - 450
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_DAPI,Andor Dragonfly,Image Splitter,TR-DFLY-CMDM-MIRR;100% Reflect
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_DAPI,Andor Dragonfly,Imaging Mode [Power Density],Confocal 40mm [PD1]
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_DAPI,Andor ILE-A,Laser 405-Power Enable,On
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_DAPI,Andor ILE-A,Laser 488-Power Enable,Off
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_DAPI,Andor ILE-A,Laser 561-Power Enable,Off
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_DAPI,Andor ILE-A,Laser 637-Power Enable,Off
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_DAPI,Andor ILE-B,Laser 445-Power Enable,Off
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_DAPI,Andor ILE-B,Laser 514-Power Enable,Off
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_DAPI,MeadowlarkLcOpenSource,String send to -,
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_DAPI,IL-Turret,Label,6-DFl
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_DAPI,TL-Shutter,State,0
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_DAPI,Condensor,Label,1-BF
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_DAPI,Transmitted Light,State,1
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_DAPI,Core,Camera,Andor EMCCD
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_DAPI,Core,Shutter,Andor ILE-A

# Preset: EMCCD_Confocal40_GFP
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_GFP,Andor EMCCD,FrameTransfer,Off
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_GFP,Andor EMCCD,ReadMode,Image
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_GFP,Andor Dragonfly,Dichroic Mirror, 1 - CR-DFLY-DMQD-01;405-013/488-013/561-006/640-016
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_GFP,Andor Dragonfly,Filter Wheel 1 Position, 1 - 525
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_GFP,Andor Dragonfly,Filter Wheel 2 Position, 1 - 525
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_GFP,Andor Dragonfly,Image Splitter,TR-DFLY-CMDM-MIRR;100% Reflect
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_GFP,Andor Dragonfly,Imaging Mode [Power Density],Confocal 40mm [PD1]
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_GFP,Andor ILE-A,Laser 405-Power Enable,Off
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_GFP,Andor ILE-A,Laser 488-Power Enable,On
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_GFP,Andor ILE-A,Laser 561-Power Enable,Off
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_GFP,Andor ILE-A,Laser 637-Power Enable,Off
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_GFP,Andor ILE-B,Laser 445-Power Enable,Off
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_GFP,Andor ILE-B,Laser 514-Power Enable,Off
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_GFP,MeadowlarkLcOpenSource,String send to -,
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_GFP,IL-Turret,Label,6-DFl
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_GFP,TL-Shutter,State,0
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_GFP,Condensor,Label,1-BF
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_GFP,Transmitted Light,State,1
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_GFP,Core,Camera,Andor EMCCD
ConfigGroup,Channels-EMCCD,EMCCD_Confocal40_GFP,Core,Shutter,Andor ILE-A


# Group: Channel

# Group: System
# Preset: Startup


# Group: LaserPower_445
# Preset: NewPreset
ConfigGroup,LaserPower_445,NewPreset,Andor ILE-B,Laser 445-Power Setpoint,0.0000


# Group: Channels-ZYLA
# Preset: Zyla_PolState3_Widefield
ConfigGroup,Channels-ZYLA,Zyla_PolState3_Widefield,Andor Dragonfly,Dichroic Mirror, 1 - CR-DFLY-DMQD-01;405-013/488-013/561-006/640-016
ConfigGroup,Channels-ZYLA,Zyla_PolState3_Widefield,Andor Dragonfly,Filter Wheel 1 Position, 7 - Empty
ConfigGroup,Channels-ZYLA,Zyla_PolState3_Widefield,Andor Dragonfly,Filter Wheel 2 Position, 7 - Empty
ConfigGroup,Channels-ZYLA,Zyla_PolState3_Widefield,Andor Dragonfly,Image Splitter,TR-DFLY-CMDM-PASS;100% Pass
ConfigGroup,Channels-ZYLA,Zyla_PolState3_Widefield,Andor Dragonfly,Imaging Mode [Power Density],Widefield [PD1]
ConfigGroup,Channels-ZYLA,Zyla_PolState3_Widefield,Andor ILE-A,Laser 405-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState3_Widefield,Andor ILE-A,Laser 488-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState3_Widefield,Andor ILE-A,Laser 561-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState3_Widefield,Andor ILE-A,Laser 637-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState3_Widefield,Andor ILE-B,Laser 445-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState3_Widefield,Andor ILE-B,Laser 514-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState3_Widefield,MeadowlarkLcOpenSource,String send to -,State3
ConfigGroup,Channels-ZYLA,Zyla_PolState3_Widefield,IL-Turret,Label,5-RCPVIS
ConfigGroup,Channels-ZYLA,Zyla_PolState3_Widefield,TL-Shutter,State,1
ConfigGroup,Channels-ZYLA,Zyla_PolState3_Widefield,Transmitted Light,State,1
ConfigGroup,Channels-ZYLA,Zyla_PolState3_Widefield,Core,Camera,Andor sCMOS
ConfigGroup,Channels-ZYLA,Zyla_PolState3_Widefield,Core,Shutter,TL-Shutter

# Preset: Zyla_PolState0_Widefield
ConfigGroup,Channels-ZYLA,Zyla_PolState0_Widefield,Andor Dragonfly,Dichroic Mirror, 1 - CR-DFLY-DMQD-01;405-013/488-013/561-006/640-016
ConfigGroup,Channels-ZYLA,Zyla_PolState0_Widefield,Andor Dragonfly,Filter Wheel 1 Position, 7 - Empty
ConfigGroup,Channels-ZYLA,Zyla_PolState0_Widefield,Andor Dragonfly,Filter Wheel 2 Position, 7 - Empty
ConfigGroup,Channels-ZYLA,Zyla_PolState0_Widefield,Andor Dragonfly,Image Splitter,TR-DFLY-CMDM-PASS;100% Pass
ConfigGroup,Channels-ZYLA,Zyla_PolState0_Widefield,Andor Dragonfly,Imaging Mode [Power Density],Widefield [PD1]
ConfigGroup,Channels-ZYLA,Zyla_PolState0_Widefield,Andor ILE-A,Laser 405-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState0_Widefield,Andor ILE-A,Laser 488-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState0_Widefield,Andor ILE-A,Laser 561-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState0_Widefield,Andor ILE-A,Laser 637-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState0_Widefield,Andor ILE-B,Laser 445-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState0_Widefield,Andor ILE-B,Laser 514-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState0_Widefield,MeadowlarkLcOpenSource,String send to -,State0
ConfigGroup,Channels-ZYLA,Zyla_PolState0_Widefield,IL-Turret,Label,5-RCPVIS
ConfigGroup,Channels-ZYLA,Zyla_PolState0_Widefield,TL-Shutter,State,1
ConfigGroup,Channels-ZYLA,Zyla_PolState0_Widefield,Transmitted Light,State,1
ConfigGroup,Channels-ZYLA,Zyla_PolState0_Widefield,Core,Camera,Andor sCMOS
ConfigGroup,Channels-ZYLA,Zyla_PolState0_Widefield,Core,Shutter,TL-Shutter

# Preset: Zyla_PolState4_Widefield
ConfigGroup,Channels-ZYLA,Zyla_PolState4_Widefield,Andor Dragonfly,Dichroic Mirror, 1 - CR-DFLY-DMQD-01;405-013/488-013/561-006/640-016
ConfigGroup,Channels-ZYLA,Zyla_PolState4_Widefield,Andor Dragonfly,Filter Wheel 1 Position, 7 - Empty
ConfigGroup,Channels-ZYLA,Zyla_PolState4_Widefield,Andor Dragonfly,Filter Wheel 2 Position, 7 - Empty
ConfigGroup,Channels-ZYLA,Zyla_PolState4_Widefield,Andor Dragonfly,Image Splitter,TR-DFLY-CMDM-PASS;100% Pass
ConfigGroup,Channels-ZYLA,Zyla_PolState4_Widefield,Andor Dragonfly,Imaging Mode [Power Density],Widefield [PD1]
ConfigGroup,Channels-ZYLA,Zyla_PolState4_Widefield,Andor ILE-A,Laser 405-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState4_Widefield,Andor ILE-A,Laser 488-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState4_Widefield,Andor ILE-A,Laser 561-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState4_Widefield,Andor ILE-A,Laser 637-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState4_Widefield,Andor ILE-B,Laser 445-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState4_Widefield,Andor ILE-B,Laser 514-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState4_Widefield,MeadowlarkLcOpenSource,String send to -,State4
ConfigGroup,Channels-ZYLA,Zyla_PolState4_Widefield,IL-Turret,Label,5-RCPVIS
ConfigGroup,Channels-ZYLA,Zyla_PolState4_Widefield,TL-Shutter,State,1
ConfigGroup,Channels-ZYLA,Zyla_PolState4_Widefield,Transmitted Light,State,1
ConfigGroup,Channels-ZYLA,Zyla_PolState4_Widefield,Core,Camera,Andor sCMOS
ConfigGroup,Channels-ZYLA,Zyla_PolState4_Widefield,Core,Shutter,TL-Shutter

# Preset: Zyla_PolState1_Widefield
ConfigGroup,Channels-ZYLA,Zyla_PolState1_Widefield,Andor Dragonfly,Dichroic Mirror, 1 - CR-DFLY-DMQD-01;405-013/488-013/561-006/640-016
ConfigGroup,Channels-ZYLA,Zyla_PolState1_Widefield,Andor Dragonfly,Filter Wheel 1 Position, 7 - Empty
ConfigGroup,Channels-ZYLA,Zyla_PolState1_Widefield,Andor Dragonfly,Filter Wheel 2 Position, 7 - Empty
ConfigGroup,Channels-ZYLA,Zyla_PolState1_Widefield,Andor Dragonfly,Image Splitter,TR-DFLY-CMDM-PASS;100% Pass
ConfigGroup,Channels-ZYLA,Zyla_PolState1_Widefield,Andor Dragonfly,Imaging Mode [Power Density],Widefield [PD1]
ConfigGroup,Channels-ZYLA,Zyla_PolState1_Widefield,Andor ILE-A,Laser 405-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState1_Widefield,Andor ILE-A,Laser 488-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState1_Widefield,Andor ILE-A,Laser 561-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState1_Widefield,Andor ILE-A,Laser 637-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState1_Widefield,Andor ILE-B,Laser 445-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState1_Widefield,Andor ILE-B,Laser 514-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState1_Widefield,MeadowlarkLcOpenSource,String send to -,State1
ConfigGroup,Channels-ZYLA,Zyla_PolState1_Widefield,IL-Turret,Label,5-RCPVIS
ConfigGroup,Channels-ZYLA,Zyla_PolState1_Widefield,TL-Shutter,State,1
ConfigGroup,Channels-ZYLA,Zyla_PolState1_Widefield,Transmitted Light,State,1
ConfigGroup,Channels-ZYLA,Zyla_PolState1_Widefield,Core,Camera,Andor sCMOS
ConfigGroup,Channels-ZYLA,Zyla_PolState1_Widefield,Core,Shutter,TL-Shutter

# Preset: Zyla_BF
ConfigGroup,Channels-ZYLA,Zyla_BF,Andor Dragonfly,Dichroic Mirror, 1 - CR-DFLY-DMQD-01;405-013/488-013/561-006/640-016
ConfigGroup,Channels-ZYLA,Zyla_BF,Andor Dragonfly,Filter Wheel 1 Position, 7 - Empty
ConfigGroup,Channels-ZYLA,Zyla_BF,Andor Dragonfly,Filter Wheel 2 Position, 7 - Empty
ConfigGroup,Channels-ZYLA,Zyla_BF,Andor Dragonfly,Image Splitter,TR-DFLY-CMDM-PASS;100% Pass
ConfigGroup,Channels-ZYLA,Zyla_BF,Andor Dragonfly,Imaging Mode [Power Density],Widefield [PD1]
ConfigGroup,Channels-ZYLA,Zyla_BF,Andor ILE-A,Laser 405-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_BF,Andor ILE-A,Laser 488-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_BF,Andor ILE-A,Laser 561-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_BF,Andor ILE-A,Laser 637-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_BF,Andor ILE-B,Laser 445-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_BF,Andor ILE-B,Laser 514-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_BF,MeadowlarkLcOpenSource,String send to -,
ConfigGroup,Channels-ZYLA,Zyla_BF,IL-Turret,Label,2-BF
ConfigGroup,Channels-ZYLA,Zyla_BF,TL-Shutter,State,1
ConfigGroup,Channels-ZYLA,Zyla_BF,Transmitted Light,State,1
ConfigGroup,Channels-ZYLA,Zyla_BF,Core,Camera,Andor sCMOS
ConfigGroup,Channels-ZYLA,Zyla_BF,Core,Shutter,TL-Shutter

# Preset: Zyla_PolState2_widefield
ConfigGroup,Channels-ZYLA,Zyla_PolState2_widefield,Andor Dragonfly,Dichroic Mirror, 1 - CR-DFLY-DMQD-01;405-013/488-013/561-006/640-016
ConfigGroup,Channels-ZYLA,Zyla_PolState2_widefield,Andor Dragonfly,Filter Wheel 1 Position, 7 - Empty
ConfigGroup,Channels-ZYLA,Zyla_PolState2_widefield,Andor Dragonfly,Filter Wheel 2 Position, 7 - Empty
ConfigGroup,Channels-ZYLA,Zyla_PolState2_widefield,Andor Dragonfly,Image Splitter,TR-DFLY-CMDM-PASS;100% Pass
ConfigGroup,Channels-ZYLA,Zyla_PolState2_widefield,Andor Dragonfly,Imaging Mode [Power Density],Widefield [PD1]
ConfigGroup,Channels-ZYLA,Zyla_PolState2_widefield,Andor ILE-A,Laser 405-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState2_widefield,Andor ILE-A,Laser 488-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState2_widefield,Andor ILE-A,Laser 561-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState2_widefield,Andor ILE-A,Laser 637-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState2_widefield,Andor ILE-B,Laser 445-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState2_widefield,Andor ILE-B,Laser 514-Power Enable,Off
ConfigGroup,Channels-ZYLA,Zyla_PolState2_widefield,MeadowlarkLcOpenSource,String send to -,State2
ConfigGroup,Channels-ZYLA,Zyla_PolState2_widefield,IL-Turret,Label,5-RCPVIS
ConfigGroup,Channels-ZYLA,Zyla_PolState2_widefield,TL-Shutter,State,1
ConfigGroup,Channels-ZYLA,Zyla_PolState2_widefield,Transmitted Light,State,1
ConfigGroup,Channels-ZYLA,Zyla_PolState2_widefield,Core,Camera,Andor sCMOS
ConfigGroup,Channels-ZYLA,Zyla_PolState2_widefield,Core,Shutter,TL-Shutter


# Group: TL-ApertureStop
# Preset: NewPreset
ConfigGroup,TL-ApertureStop,NewPreset,TL-ApertureDiaphragm,Position,24


# Group: TransmittedLight-Level
# Preset: NewPreset
ConfigGroup,TransmittedLight-Level,NewPreset,Transmitted Light,Level,0


# Group: TL-FieldStop
# Preset: NewPreset
ConfigGroup,TL-FieldStop,NewPreset,TL-FieldDiaphragm,Position,46


# Group: Objective
# Preset: 2-20x 0.55na
ConfigGroup,Objective,2-20x 0.55na,ObjectiveTurret,Label,2-20x 0.55na

# Preset: 3-40x 1.1na
ConfigGroup,Objective,3-40x 1.1na,ObjectiveTurret,Label,3-40x 1.1na

# Preset: 1-10x 0.3na
ConfigGroup,Objective,1-10x 0.3na,ObjectiveTurret,Label,1-10x 0.3na

# Preset: 4-63x 1.47na
ConfigGroup,Objective,4-63x 1.47na,ObjectiveTurret,Label,4-63x 1.47na

# Preset: 5-Empty
ConfigGroup,Objective,5-Empty,ObjectiveTurret,Label,5-Empty

# Preset: 6-Empty
ConfigGroup,Objective,6-Empty,ObjectiveTurret,Label,6-Empty


# Group: TL-Condenser
# Preset: 7--
ConfigGroup,TL-Condenser,7--,Condensor,Label,7--

# Preset: 2-Pol532
ConfigGroup,TL-Condenser,2-Pol532,Condensor,Label,2-Pol532

# Preset: 4-Ph63x
ConfigGroup,TL-Condenser,4-Ph63x,Condensor,Label,4-Ph63x

# Preset: 6--
ConfigGroup,TL-Condenser,6--,Condensor,Label,6--

# Preset: 3-Pol780
ConfigGroup,TL-Condenser,3-Pol780,Condensor,Label,3-Pol780

# Preset: 5--
ConfigGroup,TL-Condenser,5--,Condensor,Label,5--

# Preset: 1-BF
ConfigGroup,TL-Condenser,1-BF,Condensor,Label,1-BF


# Group: FL-FilterCube
# Preset: 6-DFl
ConfigGroup,FL-FilterCube,6-DFl,IL-Turret,Label,6-DFl

# Preset: 5-RCPVIS
ConfigGroup,FL-FilterCube,5-RCPVIS,IL-Turret,Label,5-RCPVIS

# Preset: 2-BF
ConfigGroup,FL-FilterCube,2-BF,IL-Turret,Label,2-BF

# Preset: 3-LinPol
ConfigGroup,FL-FilterCube,3-LinPol,IL-Turret,Label,3-LinPol

# Preset: 1-BF
ConfigGroup,FL-FilterCube,1-BF,IL-Turret,Label,1-BF

# Preset: 4-RCP780
ConfigGroup,FL-FilterCube,4-RCP780,IL-Turret,Label,4-RCP780


# Group: LaserPower_514
# Preset: NewPreset
ConfigGroup,LaserPower_514,NewPreset,TL-FieldDiaphragm,Position,46


# Group: LaserPower_405
# Preset: NewPreset
ConfigGroup,LaserPower_405,NewPreset,Andor ILE-A,Laser 405-Power Setpoint,0.0000


# Group: LaserPower_488
# Preset: NewPreset
ConfigGroup,LaserPower_488,NewPreset,Andor ILE-A,Laser 488-Power Setpoint,0.0000



# PixelSize settings
# Resolution preset: PixelSize_um_20x
ConfigPixelSize,PixelSize_um_20x,ObjectiveTurret,Label,2-20x 0.55na
PixelSize_um,PixelSize_um_20x,0.309

# Resolution preset: PixelSize_um_63x
ConfigPixelSize,PixelSize_um_63x,ObjectiveTurret,Label,4-63x 1.47na
PixelSize_um,PixelSize_um_63x,0.10238

# Resolution preset: PixelSize_um_40x
ConfigPixelSize,PixelSize_um_40x,ObjectiveTurret,Label,3-40x 1.1na
PixelSize_um,PixelSize_um_40x,0.1545

# Resolution preset: PixelSize_um_10x
ConfigPixelSize,PixelSize_um_10x,ObjectiveTurret,Label,1-10x 0.3na
PixelSize_um,PixelSize_um_10x,0.62445


